CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:17
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes

NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:Input
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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notes:['Split and rename channels']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
    Select the input image:Input
    Conversion method:Split
    Image type:Channels
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    Channel count:4
    Channel number:1
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    Image name:FiveETS_raw
    Channel number:2
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    Image name:NPM1
    Channel number:3
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    Image name:plasmidStar_raw
    Channel number:4
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    Image name:NOP56_raw

MeasureImageIntensity:[module_num:6|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notes:["Measure DFC, 5'-ETS, and plasmid intensities for background subtraction."]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
    Select images to measure:FiveETS_raw, NOP56_raw, plasmidStar_raw
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:Yes
    Specify percentiles to measure:5

ImageMath:[module_num:7|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notes:['Subtract 5 percentile intensity from corresponding channel']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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:NOP56
    Image or measurement?:Image
    Select the first image:NOP56_raw
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_Percentile_5_NOP56_raw

ImageMath:[module_num:8|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:FiveETS
    Image or measurement?:Image
    Select the first image:FiveETS_raw
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_Percentile_5_FiveETS_raw

ImageMath:[module_num:9|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:plasmidStar
    Image or measurement?:Image
    Select the first image:plasmidStar_raw
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_Percentile_5_plasmidStar_raw

IdentifyPrimaryObjects:[module_num:10|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notes:['Find GCs using NPM1 image']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
    Select the input image:NPM1
    Name the primary objects to be identified:GC
    Typical diameter of objects, in pixel units (Min,Max):50,300
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
MeasureObjectSizeShape:[module_num:11|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notes:['Measure GC sizes']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
    Select object sets to measure:GC
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:12|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notes:['Measure intensities in each GC']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
    Select images to measure:FiveETS, NOP56, plasmidStar
    Select objects to measure:GC

ConvertObjectsToImage:[module_num:13|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notes:['Convert GC to a binary image for intensity distribution measurement']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
    Select the input objects:GC
    Name the output image:GCObjectImage
    Select the color format:Binary (black & white)
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
MeasureObjectIntensityDistribution:[module_num:14|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notes:['Measure DFC and GC binary intensity for calculating a rim score']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
    Select images to measure:GCObjectImage, NOP56
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select objects to measure:GC
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:20
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
DilateObjects:[module_num:15|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notes:['Dilate GC as support for measuring colocalization']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
    Select the input object:GC
    Name the output object:DilatedGC
    Structuring element:disk,10

MeasureColocalization:[module_num:16|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notes:["Measure correlation between DFC, 5'-ETS, GC, and plasmid."]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
    Select images to measure:FiveETS, NOP56, NPM1, plasmidStar
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Within objects
    Select objects to measure:DilatedGC
    Run all metrics?:No
    Calculate correlation and slope metrics?:Yes
    Calculate the Manders coefficients?:No
    Calculate the Rank Weighted Colocalization coefficients?:No
    Calculate the Overlap coefficients?:Yes
    Calculate the Manders coefficients using Costes auto threshold?:No
    Method for Costes thresholding:Faster

ExportToSpreadsheet:[module_num:17|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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