CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:19
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (extension does isimage) (file does endwith ".nd2")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes

NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:Input
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Crop:[module_num:5|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notes:['Used for testing to improve runtime and responsiveness']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enabled:False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
    Select the input image:Input
    Name the output image:CropInput
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:0,1500
    Top and bottom rectangle positions:0,1500
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    Remove empty rows and columns?:All
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
ColorToGray:[module_num:6|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notes:['Split channels from image and give meaningful names']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
    Select the input image:Input
    Conversion method:Split
    Image type:Channels
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    Channel count:4
    Channel number:1
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    Image name:Probe
    Channel number:2
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    Image name:NOP56
    Channel number:3
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    Image name:RPA194
    Channel number:4
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    Image name:NPM1

IdentifyPrimaryObjects:[module_num:7|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notes:['Find GC within the input image.  Parameters tuned to pick out GC with varying intensity across cells.']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
    Select the input image:NPM1
    Name the primary objects to be identified:InitialGC
    Typical diameter of objects, in pixel units (Min,Max):30,400
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
SplitOrMergeObjects:[module_num:8|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notes:['Merge GC within 100 pixels as "cells"']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
    Select the input objects:InitialGC
    Name the new objects:MergedGC
    Operation:Merge
    Maximum distance within which to merge objects:100
    Merge using a grayscale image?:No
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    Merging method:Distance
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
DilateObjects:[module_num:9|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notes:['Dilate GC to pick out FCs outside of GC']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enabled:False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
    Select the input object:MergedGC
    Name the output object:DilatedGC
    Structuring element:disk,50

ErodeObjects:[module_num:10|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
    Select the input object:InitialGC
    Name the output object:ErodedGC
    Structuring element:disk,10
    Prevent object removal:Yes
    Relabel resulting objects:No

MaskImage:[module_num:11|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notes:['Mask FC image with dilated GC mask.']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
    Select the input image:RPA194
    Name the output image:MaskRPA194
    Use objects or an image as a mask?:Objects
    Select object for mask:InitialGC
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    Invert the mask?:No

EnhanceOrSuppressFeatures:[module_num:12|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notes:['Highlight FCs with diameter around 20 pixels, improves FC finding in next step.']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
    Select the input image:MaskRPA194
    Name the output image:EnhancedRPA194
    Select the operation:Enhance
    Feature size:20
    Feature type:Speckles
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    Speed and accuracy:Fast
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
IdentifyPrimaryObjects:[module_num:13|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notes:['Find FCs.  Parameters adjusted to pick out most in plane FCs']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
    Select the input image:EnhancedRPA194
    Name the primary objects to be identified:InitialFC
    Typical diameter of objects, in pixel units (Min,Max):7,50
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:0.65
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
    Size of adaptive window:100
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    Thresholding method:Otsu

MeasureObjectSizeShape:[module_num:14|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notes:['Measure sizes and shapes of nearly all objects']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
    Select object sets to measure:InitialFC, InitialGC, MergedGC
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

RelateObjects:[module_num:15|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
    Parent objects:MergedGC
    Child objects:InitialFC
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:16|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
    Parent objects:MergedGC
    Child objects:InitialGC
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:17|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
    Parent objects:MergedGC
    Child objects:ErodedGC
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
MeasureRdf:[module_num:18|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notes:['Measure RDF of each FC as a point source.']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
    Input image:Input
    Input objects:InitialFC
    Object masks:ErodedGC
    RDF radius:26
    Channels:1,2,3,4
    Consider rdf from point:Yes

ExportToSpreadsheet:[module_num:19|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notes:['']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:
    Overwrite existing files without warning?:No
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