CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:34
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (extension does isimage) (directory doesnot containregexp "[\\\\/]\\.")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes

NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:Input
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Crop:[module_num:5|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notes:['Used for testing to improve runtime and responsiveness']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enabled:False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
    Select the input image:Input
    Name the output image:CropInput
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:0,1500
    Top and bottom rectangle positions:0,1500
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    Remove empty rows and columns?:All
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
ColorToGray:[module_num:6|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notes:['Split channels from image and give meaningful names']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
    Select the input image:Input
    Conversion method:Split
    Image type:Channels
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    Channel count:4
    Channel number:1
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    Image name:Probe
    Channel number:2
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    Image name:RPA194
    Channel number:3
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    Image name:NPM1
    Channel number:4
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    Image name:NOP56

IdentifyPrimaryObjects:[module_num:7|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notes:['Find GC within the input image.  Parameters tuned to pick out GC with varying intensity across cells.']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
    Select the input image:NPM1
    Name the primary objects to be identified:InitialGC
    Typical diameter of objects, in pixel units (Min,Max):30,400
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
SplitOrMergeObjects:[module_num:8|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notes:['Merge GC within 100 pixels as "cells"']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
    Select the input objects:InitialGC
    Name the new objects:MergedGC
    Operation:Merge
    Maximum distance within which to merge objects:100
    Merge using a grayscale image?:No
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    Merging method:Distance
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
DilateObjects:[module_num:9|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notes:['Dilate GC to pick out FCs outside of GC']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
    Select the input object:MergedGC
    Name the output object:DilatedGC
    Structuring element:disk,50

MaskImage:[module_num:10|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notes:['Mask FC image with dilated GC mask.']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
    Select the input image:RPA194
    Name the output image:MaskRPA194
    Use objects or an image as a mask?:Objects
    Select object for mask:DilatedGC
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    Invert the mask?:No

EnhanceOrSuppressFeatures:[module_num:11|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notes:['Highlight FCs with diameter around 20 pixels, improves FC finding in next step.']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
    Select the input image:MaskRPA194
    Name the output image:EnhancedRPA194
    Select the operation:Enhance
    Feature size:20
    Feature type:Speckles
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    Speed and accuracy:Fast
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
IdentifyPrimaryObjects:[module_num:12|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notes:['Find FCs.  Parameters adjusted to pick out most FCs']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
    Select the input image:EnhancedRPA194
    Name the primary objects to be identified:InitialFC
    Typical diameter of objects, in pixel units (Min,Max):7,50
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:0.65
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
    Size of adaptive window:100
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    Thresholding method:Otsu

MaskObjects:[module_num:13|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notes:['Find FCs which fall outside the initial GC area, e.g. are in the nucleoplasm']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
    Select objects to be masked:InitialFC
    Name the masked objects:ExtraNucleolarFCs
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:InitialGC
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.5
    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskImage:[module_num:14|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notes:['Mask DFC image by dilated GC for thresholding DFC in next step.']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
    Select the input image:NOP56
    Name the output image:MaskNOP56
    Use objects or an image as a mask?:Objects
    Select object for mask:DilatedGC
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    Invert the mask?:No

Threshold:[module_num:15|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notes:['Find DFCs with adaptive Otsu']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
    Select the input image:MaskNOP56
    Name the output image:ThresholdNOP56
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
    Size of adaptive window:150
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    Thresholding method:Otsu

ConvertImageToObjects:[module_num:16|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notes:['Convert the threshold image to objects for further processing']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
    Select the input image:ThresholdNOP56
    Name the output object:DFCObjectsRaw
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

MeasureObjectSizeShape:[module_num:17|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notes:['Measure DFC object sizes for use in filtering']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
    Select object sets to measure:DFCObjectsRaw
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:18|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notes:['Remove DFCs which are too small']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
    Select the objects to filter:DFCObjectsRaw
    Name the output objects:DFCObjects
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:20
    Filter using a maximum measurement value?:No
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
ConvertObjectsToImage:[module_num:19|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notes:['This and the following convert an object to a binary image to simplify determining the union of FC, DFC, GC using image math.  Additionally, the GC object image is used for normalizing distribution measurements.']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
    Select the input objects:DFCObjects
    Name the output image:DFCObjectImage
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:20|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
    Select the input objects:InitialFC
    Name the output image:FCObjectImage
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:21|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
    Select the input objects:InitialGC
    Name the output image:GCObjectImage
    Select the color format:Binary (black & white)
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
MeasureObjectIntensityDistribution:[module_num:22|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notes:['Measure intensity distribution of DFC and FC for estimating rim enrichment.  Measure the binary GC object image to estimate the area of each bin and allow combining adjacent bins in python.']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
    Select images to measure:GCObjectImage, NOP56, RPA194
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select objects to measure:InitialGC
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:20
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
ImageMath:[module_num:23|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notes:['Add all binary images together to estimate the union of each phase.  This is a subset of the dilated GC objects.']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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:CombinedImage
    Image or measurement?:Image
    Select the first image:DFCObjectImage
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:FCObjectImage
    Multiply the second image by:1.0
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    Image or measurement?:Image
    Select the third image:GCObjectImage
    Multiply the third image by:1.0
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
ConvertImageToObjects:[module_num:24|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notes:['Convert the binary, combined image into labeled objects.']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
    Select the input image:CombinedImage
    Name the output object:CombinedObjects
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

MeasureColocalization:[module_num:25|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notes:['Calculate correlation of each component over the combined phases.']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
    Select images to measure:NOP56, NPM1, Probe, RPA194
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Within objects
    Select objects to measure:CombinedObjects
    Run all metrics?:No
    Calculate correlation and slope metrics?:Yes
    Calculate the Manders coefficients?:No
    Calculate the Rank Weighted Colocalization coefficients?:Yes
    Calculate the Overlap coefficients?:Yes
    Calculate the Manders coefficients using Costes auto threshold?:No
    Method for Costes thresholding:Faster

MeasureObjectSizeShape:[module_num:26|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notes:['Measure sizes and shapes of nearly all objects']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
    Select object sets to measure:CombinedObjects, DFCObjects, DilatedGC, ExtraNucleolarFCs, InitialFC, InitialGC, MergedGC
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:27|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notes:['Measure RPA194 intensity in FCs']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
    Select images to measure:Probe, RPA194
    Select objects to measure:InitialFC

MeasureObjectIntensity:[module_num:28|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notes:['Measure NOP56, NPM1 and Probe intensity in initial GC area']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
    Select images to measure:NOP56, NPM1, Probe
    Select objects to measure:DFCObjects, InitialGC

RelateObjects:[module_num:29|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notes:['Relate all objects back to merged, dilated GC for analysis']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
    Parent objects:DilatedGC
    Child objects:InitialGC
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:30|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
    Parent objects:DilatedGC
    Child objects:InitialFC
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:31|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
    Parent objects:DilatedGC
    Child objects:ExtraNucleolarFCs
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:32|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
    Parent objects:DilatedGC
    Child objects:CombinedObjects
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:33|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
    Parent objects:DilatedGC
    Child objects:DFCObjects
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
ExportToSpreadsheet:[module_num:34|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notes:['']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:
    Overwrite existing files without warning?:No
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