CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:19
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes

NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:Input
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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notes:['Split each channel from image and give descriptive name']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
    Select the input image:Input
    Conversion method:Split
    Image type:Channels
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    Channel count:4
    Channel number:1
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    Image name:PF_Raw
    Channel number:2
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    Image name:NOP56_Raw
    Channel number:3
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    Image name:starPlasmid_Raw
    Channel number:4
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    Image name:NPM1_Raw

MeasureImageIntensity:[module_num:6|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notes:['Measure 5 percentile intensity for background subtraction.']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
    Select images to measure:NOP56_Raw, NPM1_Raw, PF_Raw, starPlasmid_Raw
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:Yes
    Specify percentiles to measure:5

ImageMath:[module_num:7|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notes:['This and the following, subtract the 5 percentile intensity value from the corresponding channel.']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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:NOP56
    Image or measurement?:Image
    Select the first image:NOP56_Raw
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_Percentile_5_NOP56_Raw

ImageMath:[module_num:8|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:NPM1
    Image or measurement?:Image
    Select the first image:NPM1_Raw
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_Percentile_5_NPM1_Raw

ImageMath:[module_num:9|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:PF
    Image or measurement?:Image
    Select the first image:PF_Raw
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_Percentile_5_PF_Raw

ImageMath:[module_num:10|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:starPlasmid
    Image or measurement?:Image
    Select the first image:starPlasmid_Raw
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_Percentile_5_starPlasmid_Raw

GaussianFilter:[module_num:11|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notes:['Blur DFC image to improve finding the nucleolus from this semi-punctate structure.']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
    Select the input image:NOP56
    Name the output image:NOP56Filtered
    Sigma:5

IdentifyPrimaryObjects:[module_num:12|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notes:['Find nulceoli from blurred DFC image.  Unable to use GC since we want to measure colocalization of GC with other markers where GC may be absent.']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
    Select the input image:NOP56Filtered
    Name the primary objects to be identified:InitialNucleoli
    Typical diameter of objects, in pixel units (Min,Max):10,150
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
DilateObjects:[module_num:13|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notes:['Dilate the nucleoli as a support for performing boundary-based RDF']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
    Select the input object:InitialNucleoli
    Name the output object:DilatedNucleoli
    Structuring element:disk,10

MaskObjects:[module_num:14|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notes:['Subtract the interior of each nucleoli from the dilated objects to label the rim region.']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
    Select objects to be masked:DilatedNucleoli
    Name the masked objects:NucleoplasmRim
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:InitialNucleoli
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MeasureRdf:[module_num:15|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notes:['Measure boundary-based RDF of each nucleoli.  Radius here should match dilation used above.']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
    Input image:Input
    Input objects:InitialNucleoli
    Object masks:DilatedNucleoli
    RDF radius:10
    Channels:1,2,3,4
    Consider rdf from point:No

MeasureObjectIntensity:[module_num:16|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notes:['Measure intensity of each channel in the interior and rim.']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
    Select images to measure:NOP56, NPM1, PF, starPlasmid
    Select objects to measure:InitialNucleoli, NucleoplasmRim

MeasureObjectSizeShape:[module_num:17|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notes:['Measure sizes of nucleolus.']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
    Select object sets to measure:DilatedNucleoli, InitialNucleoli
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

RelateObjects:[module_num:18|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notes:['Related dilated to intitial nucleoli for processing.']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
    Parent objects:DilatedNucleoli
    Child objects:InitialNucleoli
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
ExportToSpreadsheet:[module_num:19|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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